CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:ColorCells
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:ColorCells
    Conversion method:Combine
    Image type:RGB
    Name the output image:GrayCells
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:GrayCells
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
OverlayOutlines:[module_num:7|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorCells
    Name the output image:ColorCellsOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFF0A
    Select objects to display:Cells

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:ColorCellsOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:ColorCells
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/UF/Thesis/Processed Images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/UF/Thesis/Codes/image-analysis-GBM
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Width_ColorCells,Image|Height_ColorCells,Cells|Location_Center_X,Cells|Location_Center_Y,Cells|Location_Center_Z,Cells|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Counts_
    Overwrite existing files without warning?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
